PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  expName = manipulation-of-belief
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine video
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    CodeComponent load_design
      Code Type = Py
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      Begin Experiment:
        import csv

        stimuli_design = []
        with open('variables/subjects_design.csv', 'r') as csvfile:
            reader = csv.DictReader(csvfile)
            for row in reader:
                stimuli_design.append(row)

        subj_num = int(expInfo['participant'])
        selected_order = stimuli_design[subj_num]
        print(f"Subject {subj_num} - selected order: {selected_order}")
      Begin Routine:
        video_file = 'stimuli/' + selected_order[f'video{video_index}']
        label_text = selected_order[f'label{video_index}']
    MovieComponent video1
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $video_file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $label_text
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  Routine SAM_2
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    ImageComponent question_sam_2
      image = stimuli/sam-2.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent rating_sam_2
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SAM_1
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    ImageComponent question_sam_1
      image = stimuli/sam-1.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent rating_sam_1
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SAM_3
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    ImageComponent question_sam_3
      image = stimuli/sam-3.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent rating_sam_3
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator stimuli loopType="TrialHandler"
    conditionsFile = variables/stimuli.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('video_index', np.int64(1))]),
      OrderedDict([('video_index', np.int64(2))]),
      OrderedDict([('video_index', np.int64(3))]),
      OrderedDict([('video_index', np.int64(4))])]
    Routine video
    Routine SAM_1
    Routine SAM_2
    Routine SAM_3
  LoopTerminator stimuli
